CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:54
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DNA
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:IF_prob_Nucl
    Name the primary objects to be identified:IFp_PriObj
    Typical diameter of objects, in pixel units (Min,Max):15,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:12
    Suppress local maxima that are closer than this minimum allowed distance:15
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.5,1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:IFp_PriObj
    Name the objects to be identified:IFp_SecObj
    Select the method to identify the secondary objects:Distance - N
    Select the input image:IF_prob_Edge
    Number of pixels by which to expand the primary objects:3
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
MeasureObjectIntensity:[module_num:7|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
    Hidden:3
    Select an image to measure:IF_prob_Nucl
    Select an image to measure:IF_prob_Edge
    Select an image to measure:IF_DAPI
    Select objects to measure:IFp_SecObj

MeasureObjectSizeShape:[module_num:8|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
    Select objects to measure:IFp_SecObj
    Calculate the Zernike features?:No

FilterObjects:[module_num:9|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
    Select the objects to filter:IFp_SecObj
    Name the output objects:IFp_SecObj_F
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:3
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_IF_prob_Nucl
    Filter using a minimum measurement value?:Yes
    Minimum value:0.5
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:350
    Filter using a maximum measurement value?:Yes
    Maximum value:1750
    Select the measurement to filter by:AreaShape_Solidity
    Filter using a minimum measurement value?:Yes
    Minimum value:0.7
    Filter using a maximum measurement value?:No
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
ClassifyObjects:[module_num:10|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
    Make each classification decision on how many measurements?:Single measurement
    Hidden:3
    Select the object to be classified:IFp_SecObj
    Select the measurement to classify by:Intensity_MeanIntensity_IF_prob_Nucl
    Select bin spacing:Custom-defined bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:Yes
    Upper threshold:1.0
    Use a bin for objects above the threshold?:Yes
    Enter the custom thresholds separating the values between bins:0.5
    Give each bin a name?:Yes
    Enter the bin names separated by commas:IFp_SecObj_IF_prob_Nucl_MeanInt_Low,IFp_SecObj_IF_prob_Nucl_MeanInt_OK
    Retain an image of the classified objects?:Yes
    Name the output image:IFp_SecObj_IF_prob_Nucl_MeanInt_class
    Select the object to be classified:IFp_SecObj
    Select the measurement to classify by:AreaShape_Area
    Select bin spacing:Custom-defined bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:Yes
    Upper threshold:1.0
    Use a bin for objects above the threshold?:Yes
    Enter the custom thresholds separating the values between bins:350,1750
    Give each bin a name?:Yes
    Enter the bin names separated by commas:IFp_SecObj_Area_Low,IFp_SecObj_Area_OK, Area_High
    Retain an image of the classified objects?:Yes
    Name the output image:IFp_SecObj_Area_class
    Select the object to be classified:IFp_SecObj
    Select the measurement to classify by:AreaShape_Solidity
    Select bin spacing:Custom-defined bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:Yes
    Upper threshold:1.0
    Use a bin for objects above the threshold?:Yes
    Enter the custom thresholds separating the values between bins:.7
    Give each bin a name?:Yes
    Enter the bin names separated by commas:IFp_SecObj_Solidity_Low,IFp_SecObj_Solidity_OK
    Retain an image of the classified objects?:Yes
    Name the output image:IFp_SecObj_Solidity_class
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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
SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:IFp_SecObj_IF_prob_Nucl_MeanInt_class
    Select method for constructing file names:From image filename
    Select image name for file prefix:IMC_prob_Nucl
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_IF_pri_MeanInt_class
    Saved file format:png
    Output file location:Default Output Folder sub-folder|Classification
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:IFp_SecObj_Area_class
    Select method for constructing file names:From image filename
    Select image name for file prefix:IMC_prob_Nucl
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_IF_pri_Area_class
    Saved file format:png
    Output file location:Default Output Folder sub-folder|Classification
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:IFp_SecObj_Solidity_class
    Select method for constructing file names:From image filename
    Select image name for file prefix:IMC_prob_Nucl
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_IF_pri_Solidity_class
    Saved file format:png
    Output file location:Default Output Folder sub-folder|Classification
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ResizeObjects:[module_num:14|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
    Select the input object:IFp_SecObj_F
    Name the output object:IFp_SecObj_F_R
    Method:Factor
    Factor:0.312597686777118
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
MeasureObjectIntensity:[module_num:15|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
    Hidden:2
    Select an image to measure:IMC_prob_Nucl
    Select an image to measure:IMC_IR193
    Select objects to measure:IFp_SecObj_F_R

IdentifySecondaryObjects:[module_num:16|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
    Select the input objects:IFp_SecObj_F_R
    Name the objects to be identified:IFp_SecObj_F_R_IMCp_SecObj
    Select the method to identify the secondary objects:Propagation
    Select the input image:IMC_prob_membr
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.2,1.0
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    Two-class or three-class thresholding?:Two classes
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
MeasureObjectSizeShape:[module_num:17|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
    Select objects to measure:IFp_SecObj_F_R_IMCp_SecObj
    Calculate the Zernike features?:No

FilterObjects:[module_num:18|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
    Select the objects to filter:IFp_SecObj_F_R_IMCp_SecObj
    Name the output objects:IFp_SecObj_F_R_IMCp_SecObj_F
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:1
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:35
    Filter using a maximum measurement value?:Yes
    Maximum value:300
    Select additional object to relabel:IFp_SecObj_F_R
    Name the relabeled objects:IFp_SecObj_F_R_F

ClassifyObjects:[module_num:19|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
    Make each classification decision on how many measurements?:Single measurement
    Hidden:1
    Select the object to be classified:IFp_SecObj_F_R_IMCp_SecObj
    Select the measurement to classify by:AreaShape_Area
    Select bin spacing:Custom-defined bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:Yes
    Upper threshold:1.0
    Use a bin for objects above the threshold?:Yes
    Enter the custom thresholds separating the values between bins:35,300
    Give each bin a name?:Yes
    Enter the bin names separated by commas:IFp_SecObj_F_R_IMCp_SecObj_Area_Low,IFp_SecObj_F_R_IMCp_SecObj_Area_OK,IFp_SecObj_F_R_IMCp_SecObj_Area_High
    Retain an image of the classified objects?:Yes
    Name the output image:IFp_SecObj_F_R_IMCp_SecObj_Area_class
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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
SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:IFp_SecObj_F_R_IMCp_SecObj_Area_class
    Select method for constructing file names:From image filename
    Select image name for file prefix:IMC_prob_Nucl
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_IF_sec_Area_class
    Saved file format:png
    Output file location:Default Output Folder sub-folder|Classification
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ConvertObjectsToImage:[module_num:21|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
    Select the input objects:IFp_SecObj_F_R_F
    Name the output image:IFp_SecObj_F_R_Relate_obj
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:22|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
    Select the input objects:IFp_SecObj_F_R_IMCp_SecObj_F
    Name the output image:IFp_SecObj_F_R_IMCp_SecObj_F_obj
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:23|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
    Select the input objects:IFp_SecObj_F_R_F
    Name the output image:IFp_SecObj_F_R_Relate_RGB
    Select the color format:Color
    Select the colormap:hsv

ConvertObjectsToImage:[module_num:24|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
    Select the input objects:IFp_SecObj_F_R_IMCp_SecObj_F
    Name the output image:IFp_SecObj_F_R_IMCp_SecObj_F_RGB
    Select the color format:Color
    Select the colormap:hsv

OverlayOutlines:[module_num:25|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
    Display outlines on a blank image?:Yes
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    Name the output image:IFp_SecObj_F_R_Relate_Edges
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:IFp_SecObj_F_R_F

OverlayOutlines:[module_num:26|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
    Display outlines on a blank image?:Yes
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    Name the output image:IFp_SecObj_F_R_IMCp_SecObj_F_Edges
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:IFp_SecObj_F_R_IMCp_SecObj_F

SaveImages:[module_num:27|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
    Select the type of image to save:Image
    Select the image to save:IFp_SecObj_F_R_Relate_obj
    Select method for constructing file names:From image filename
    Select image name for file prefix:IMC_prob_Nucl
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_IF-IMC_PriObj
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Obj
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:28|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
    Select the type of image to save:Image
    Select the image to save:IFp_SecObj_F_R_IMCp_SecObj_F_obj
    Select method for constructing file names:From image filename
    Select image name for file prefix:IMC_prob_Nucl
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_IF-IMC_SecObj
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Obj
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:29|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
    Select the type of image to save:Image
    Select the image to save:IFp_SecObj_F_R_Relate_RGB
    Select method for constructing file names:From image filename
    Select image name for file prefix:IMC_prob_Nucl
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_IF-IMC_PriObj_RGB
    Saved file format:png
    Output file location:Default Output Folder sub-folder|RGB
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:30|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
    Select the type of image to save:Image
    Select the image to save:IFp_SecObj_F_R_IMCp_SecObj_F_RGB
    Select method for constructing file names:From image filename
    Select image name for file prefix:IMC_prob_Nucl
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_IF-IMC_SecObj_RGB
    Saved file format:png
    Output file location:Default Output Folder sub-folder|RGB
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:31|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
    Select the type of image to save:Image
    Select the image to save:IFp_SecObj_F_R_IMCp_SecObj_F_Edges
    Select method for constructing file names:From image filename
    Select image name for file prefix:IMC_prob_Nucl
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_IF-IMC_SecObj_Edge
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|obj
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
IdentifyPrimaryObjects:[module_num:32|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
    Select the input image:IMC_prob_Nucl
    Name the primary objects to be identified:IMCp_PriObj
    Typical diameter of objects, in pixel units (Min,Max):5,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.2,1.0
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
MeasureObjectIntensity:[module_num:33|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
    Hidden:2
    Select an image to measure:IMC_IR193
    Select an image to measure:IMC_prob_Nucl
    Select objects to measure:IMCp_PriObj

FilterObjects:[module_num:34|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
    Select the objects to filter:IMCp_PriObj
    Name the output objects:IMCp_PriObj_F
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_IMC_prob_Nucl
    Filter using a minimum measurement value?:Yes
    Minimum value:0.25
    Filter using a maximum measurement value?:No
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
ClassifyObjects:[module_num:35|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
    Make each classification decision on how many measurements?:Single measurement
    Hidden:1
    Select the object to be classified:IMCp_PriObj
    Select the measurement to classify by:Intensity_MeanIntensity_IMC_prob_Nucl
    Select bin spacing:Custom-defined bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:Yes
    Upper threshold:1.0
    Use a bin for objects above the threshold?:Yes
    Enter the custom thresholds separating the values between bins:0.25
    Give each bin a name?:Yes
    Enter the bin names separated by commas:IMCp_PriObj_IMC_prob_Nucl_MeanInt_Low,IMCp_PriObj_F_IMC_prob_Nucl_MeanInt_OK
    Retain an image of the classified objects?:Yes
    Name the output image:IMCp_PriObj_IMC_prob_Nucl_MeanInt_class
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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
SaveImages:[module_num:36|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
    Select the type of image to save:Image
    Select the image to save:IMCp_PriObj_IMC_prob_Nucl_MeanInt_class
    Select method for constructing file names:From image filename
    Select image name for file prefix:IMC_prob_Nucl
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_IMC_pri_MeanInt_class
    Saved file format:png
    Output file location:Default Output Folder sub-folder|Classification
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
IdentifySecondaryObjects:[module_num:37|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
    Select the input objects:IMCp_PriObj_F
    Name the objects to be identified:IMCp_PriObj_F_IMCp_SecObj
    Select the method to identify the secondary objects:Propagation
    Select the input image:IMC_prob_membr
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.2,1.0
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    Two-class or three-class thresholding?:Two classes
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
MeasureObjectIntensity:[module_num:38|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
    Hidden:1
    Select an image to measure:IMC_prob_membr
    Select objects to measure:IMCp_PriObj_F_IMCp_SecObj

MeasureObjectSizeShape:[module_num:39|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
    Select objects to measure:IMCp_PriObj_F_IMCp_SecObj
    Calculate the Zernike features?:No

FilterObjects:[module_num:40|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
    Select the objects to filter:IMCp_PriObj_F_IMCp_SecObj
    Name the output objects:IMCp_PriObj_F_IMCp_SecObj_F
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:1
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:35
    Filter using a maximum measurement value?:Yes
    Maximum value:300
    Select additional object to relabel:IMCp_PriObj_F
    Name the relabeled objects:IMCp_PriObj_F_F

ClassifyObjects:[module_num:41|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
    Make each classification decision on how many measurements?:Single measurement
    Hidden:1
    Select the object to be classified:IMCp_PriObj_F_IMCp_SecObj
    Select the measurement to classify by:AreaShape_Area
    Select bin spacing:Custom-defined bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:Yes
    Upper threshold:1.0
    Use a bin for objects above the threshold?:Yes
    Enter the custom thresholds separating the values between bins:35,300
    Give each bin a name?:Yes
    Enter the bin names separated by commas:IMCp_PriObj_F_IMCp_SecObj_Area_Low,IMCp_PriObj_F_IMCp_SecObj_Area_OK,IMCp_PriObj_F_IMCp_SecObj_Area_High
    Retain an image of the classified objects?:Yes
    Name the output image:IMCp_PriObj_F_IMCp_SecObj_Area_class
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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
SaveImages:[module_num:42|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
    Select the type of image to save:Image
    Select the image to save:IMCp_PriObj_F_IMCp_SecObj_Area_class
    Select method for constructing file names:From image filename
    Select image name for file prefix:IMC_prob_Nucl
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_IMC_sec_Area_class
    Saved file format:png
    Output file location:Default Output Folder sub-folder|Classification
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ConvertObjectsToImage:[module_num:43|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
    Select the input objects:IMCp_PriObj_F_F
    Name the output image:IMCp_PriObj_F_Relate_obj
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:44|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
    Select the input objects:IMCp_PriObj_F_IMCp_SecObj_F
    Name the output image:IMCp_PriObj_F_IMCp_SecObj_F_obj
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:45|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
    Select the input objects:IMCp_PriObj_F_F
    Name the output image:IMCp_PriObj_F_Relate_RGB
    Select the color format:Color
    Select the colormap:hsv

ConvertObjectsToImage:[module_num:46|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
    Select the input objects:IMCp_PriObj_F_IMCp_SecObj_F
    Name the output image:IMCp_PriObj_F_IMCp_SecObj_F_RGB
    Select the color format:Color
    Select the colormap:hsv

OverlayOutlines:[module_num:47|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
    Display outlines on a blank image?:Yes
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    Name the output image:IMCp_PriObj_F_Relate_Edges
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:IMCp_PriObj_F_F

OverlayOutlines:[module_num:48|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
    Display outlines on a blank image?:Yes
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    Name the output image:IMCp_PriObj_F_IMCp_SecObj_F_Edges
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:IMCp_PriObj_F_IMCp_SecObj_F

SaveImages:[module_num:49|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
    Select the type of image to save:Image
    Select the image to save:IMCp_PriObj_F_Relate_obj
    Select method for constructing file names:From image filename
    Select image name for file prefix:IMC_prob_Nucl
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_IMC-IMC_PriObj
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Obj
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:50|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
    Select the type of image to save:Image
    Select the image to save:IMCp_PriObj_F_IMCp_SecObj_F_obj
    Select method for constructing file names:From image filename
    Select image name for file prefix:IMC_prob_Nucl
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_IMC-IMC_SecObj
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Obj
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:51|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
    Select the type of image to save:Image
    Select the image to save:IMCp_PriObj_F_Relate_RGB
    Select method for constructing file names:From image filename
    Select image name for file prefix:IMC_prob_Nucl
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_IMC-IMC_PriObj_RGB
    Saved file format:png
    Output file location:Default Output Folder sub-folder|RGB
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:52|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
    Select the type of image to save:Image
    Select the image to save:IMCp_PriObj_F_IMCp_SecObj_F_RGB
    Select method for constructing file names:From image filename
    Select image name for file prefix:IMC_prob_Nucl
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_IMC-IMC_SecObj_RGB
    Saved file format:png
    Output file location:Default Output Folder sub-folder|RGB
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:53|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
    Select the type of image to save:Image
    Select the image to save:IMCp_PriObj_F_IMCp_SecObj_F_Edges
    Select method for constructing file names:From image filename
    Select image name for file prefix:IMC_prob_Nucl
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_IMC-IMC_SecObj_Edge
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|obj
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:54|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|Spreadsheets
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:IFp_SecObj|Intensity_MeanIntensity_IF_DAPI,IFp_SecObj|Intensity_MeanIntensity_IF_prob_Nucl,IFp_SecObj|Intensity_MeanIntensity_IF_prob_Edge,IFp_SecObj|AreaShape_Solidity,IFp_SecObj|AreaShape_Area,IFp_SecObj|Classify_IFp_SecObj_Solidity_OK,IFp_SecObj|Classify_IFp_SecObj_Solidity_Low,IFp_SecObj|Classify_IFp_SecObj_Area_OK,IFp_SecObj|Classify_IFp_SecObj_Area_Low,IFp_SecObj|Classify_IFp_SecObj_IF_prob_Nucl_MeanInt_OK,IFp_SecObj|Classify_IFp_SecObj_IF_prob_Nucl_MeanInt_Low,IFp_SecObj|Classify_Area_High,IFp_SecObj_F_R_IMCp_SecObj|AreaShape_Solidity,IFp_SecObj_F_R_IMCp_SecObj|AreaShape_Area,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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